WorkflowBuilder(Version=2.6.2)
Bonsai.Vision.FileCapture(FileName="C:\Users\Andre Maia Chagas\Desktop\M-Movie0005.avi", PlaybackRate=1000, StartPosition=0, PositionUnits=Frames, Loop=true, Playing=true) => #0
-> Bonsai.Vision.Crop(RegionOfInterest(X=28, Y=0, Width=142, Height=127)) => #1
-> Bonsai.Vision.HsvThreshold(Lower(Val0=0, Val1=0, Val2=39, Val3=0), Upper(Val0=179, Val1=255, Val2=255, Val3=255))
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=10, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.SortBinaryRegions => #5
#1, #5 -> GroupWorkflow top-left => #6
    WorkflowInput Source1 => #0
    WorkflowInput Source2 => #1
    -> Index(Operand=IntProperty(Value=0)) => #2
    #2, #0 -> GroupWorkflow => #3
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=19, Y=6, Width=13, Height=32))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=1)) => #4
    #4, #0 -> GroupWorkflow => #5
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=72, Y=8, Width=12, Height=28))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=2)) => #6
    #6, #0 -> GroupWorkflow => #7
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=68, Y=82, Width=11, Height=30))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=3)) => #8
    #8, #0 -> GroupWorkflow => #9
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=18, Y=82, Width=12, Height=28))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=4)) => #10
    #10, #0 -> GroupWorkflow => #11
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=121, Y=84, Width=10, Height=30))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=5)) => #12
    #12, #0 -> GroupWorkflow => #13
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=120, Y=8, Width=11, Height=28))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #3, #5, #7, #9, #11, #13 -> Zip
    -> WorkflowOutput
#0 -> Bonsai.Vision.Crop(RegionOfInterest(X=217, Y=7, Width=142, Height=127)) => #7
-> Bonsai.Vision.HsvThreshold(Lower(Val0=0, Val1=0, Val2=39, Val3=0), Upper(Val0=179, Val1=255, Val2=255, Val3=255))
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=95, MaxArea=300)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.SortBinaryRegions => #11
#7, #11 -> GroupWorkflow top-right => #12
    WorkflowInput Source1 => #0
    WorkflowInput Source2 => #1
    -> Index(Operand=IntProperty(Value=0)) => #2
    #2, #0 -> GroupWorkflow => #3
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=70, Y=77, Width=11, Height=30))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=1)) => #4
    #4, #0 -> GroupWorkflow => #5
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=122, Y=15, Width=11, Height=32))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=2)) => #6
    #6, #0 -> GroupWorkflow => #7
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=18, Y=17, Width=11, Height=30))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=3)) => #8
    #8, #0 -> GroupWorkflow => #9
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=66, Y=17, Width=11, Height=28))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=4)) => #10
    #10, #0 -> GroupWorkflow => #11
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=18, Y=81, Width=11, Height=30))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=5)) => #12
    #12, #0 -> GroupWorkflow => #13
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=118, Y=85, Width=11, Height=28))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #3, #5, #7, #9, #11, #13 -> Zip
    -> WorkflowOutput
#0 -> Bonsai.Vision.Crop(RegionOfInterest(X=30, Y=172, Width=142, Height=127)) => #13
-> Bonsai.Vision.HsvThreshold(Lower(Val0=0, Val1=0, Val2=39, Val3=0), Upper(Val0=179, Val1=255, Val2=255, Val3=255))
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=95, MaxArea=300)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.SortBinaryRegions => #17
#13, #17 -> GroupWorkflow bottom-left => #18
    WorkflowInput Source1 => #0
    WorkflowInput Source2 => #1
    -> Index(Operand=IntProperty(Value=0)) => #2
    #2, #0 -> GroupWorkflow => #3
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=62, Y=88, Width=11, Height=30))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=1)) => #4
    #4, #0 -> GroupWorkflow => #5
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=13, Y=16, Width=13, Height=30))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=2)) => #6
    #6, #0 -> GroupWorkflow => #7
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=14, Y=90, Width=11, Height=30))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=3)) => #8
    #8, #0 -> GroupWorkflow => #9
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=62, Y=14, Width=12, Height=30))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=4)) => #10
    #10, #0 -> GroupWorkflow => #11
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=109, Y=16, Width=11, Height=30))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=5)) => #12
    #12, #0 -> GroupWorkflow => #13
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=111, Y=86, Width=12, Height=30))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #3, #5, #7, #9, #11, #13 -> Zip
    -> WorkflowOutput
#0 -> Bonsai.Vision.Crop(RegionOfInterest(X=216, Y=172, Width=142, Height=127)) => #19
-> Bonsai.Vision.HsvThreshold(Lower(Val0=0, Val1=0, Val2=39, Val3=0), Upper(Val0=179, Val1=255, Val2=255, Val3=255))
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=95, MaxArea=300)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.SortBinaryRegions => #23
#19, #23 -> GroupWorkflow bottom-right => #24
    WorkflowInput Source1 => #0
    WorkflowInput Source2 => #1
    -> Index(Operand=IntProperty(Value=0)) => #2
    #2, #0 -> GroupWorkflow => #3
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=63, Y=90, Width=13, Height=30))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=1)) => #4
    #4, #0 -> GroupWorkflow => #5
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=12, Y=88, Width=14, Height=30))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=2)) => #6
    #6, #0 -> GroupWorkflow => #7
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=118, Y=18, Width=11, Height=32))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=3)) => #8
    #8, #0 -> GroupWorkflow => #9
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=114, Y=94, Width=11, Height=30))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=4)) => #10
    #10, #0 -> GroupWorkflow => #11
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=13, Y=14, Width=11, Height=30))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=5)) => #12
    #12, #0 -> GroupWorkflow => #13
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=63, Y=18, Width=11, Height=30))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        -> ElementCountWindow(Count=60, Skip=1)
        -> SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new( it as runningAverage
             )
        #6 -> Bonsai.Scripting.ExpressionTransform => #10
          Expression:
            new( it as brightAverage
             )
        #10, #9 -> Zip
        -> WorkflowOutput
    #3, #5, #7, #9, #11, #13 -> Zip
    -> WorkflowOutput
#6, #12, #18, #24 -> Zip
-> Bonsai.IO.CsvWriter(FileName=test2.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
